PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  blendMode = nofbo
  color = -1.0000, -1.0000, -1.0000
  expName = energy_density
  keyboardBackend = ioHub
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Routines
  Routine choose
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    CodeComponent mouse_hide
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)
    TextComponent choose_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Choose protocol

        1 = high
        2 = low
        3 = scramble
    KeyboardComponent prot_selection
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine wait
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    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wait for 'o' trigger from scanner
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    KeyboardComponent trigger
      allowedKeys = 'o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine fix
    RoutineSettingsComponent fix
      saveStartStop = False
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    PolygonComponent fix_jittered
      fillColor = white
      shape = cross
      size = (.05,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    StaticComponent preload
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent load_chosen_prot
      Code Type = Py
      Begin Routine:
        if prot_selection.keys == "1":
            jitter = high_jitter
            imgpath = high_imgpath
            dur_a = high_dur_a
            dur_b = high_dur_b
            dur_c = high_dur_c
        elif prot_selection.keys == "2":
            jitter = low_jitter
            imgpath = low_imgpath
            dur_a = low_dur_a
            dur_b = low_dur_b
            dur_c = low_dur_c
        elif prot_selection.keys == "3":
            jitter = scramble_jitter
            imgpath = scramble_imgpath
            dur_a = scramble_dur_a
            dur_b = scramble_dur_b
            dur_c = scramble_dur_c
  Routine image_a
    RoutineSettingsComponent image_a
      saveStartStop = False
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    ImageComponent pic_a
      image [set during: fix.preload] = $imgpath+"a.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_a
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  Routine image_b
    RoutineSettingsComponent image_b
      saveStartStop = False
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    ImageComponent pic_b
      image [set during: fix.preload] = $imgpath+"b.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_b
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  Routine image_c
    RoutineSettingsComponent image_c
      saveStartStop = False
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    ImageComponent pic_c
      image [set during: fix.preload] = $imgpath+"c.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_c
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  Routine end_fix
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    PolygonComponent last_fix
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (.05,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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Flow
  Routine choose
  Routine wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'high_imgpath': 'images/high/B11_', 'high_dur_a': 1, 'high_dur_b': 3, 'high_dur_c': 3.5, 'high_jitter': 4, 'low_imgpath': 'images/low/B3_', 'low_dur_a': 4, 'low_dur_b': 2, 'low_dur_c': 1.5, 'low_jitter': 4, 'scramble_imgpath': 'images/scramble/B4_', 'scramble_dur_a': 3.5, 'scramble_dur_b': 1.5, 'scramble_dur_c': 2.5, 'scramble_jitter': 4},
      {'high_imgpath': 'images/high/B7_', 'high_dur_a': 2, 'high_dur_b': 2.5, 'high_dur_c': 3, 'high_jitter': 5, 'low_imgpath': 'images/low/B9_', 'low_dur_a': 3, 'low_dur_b': 3.5, 'low_dur_c': 1, 'low_jitter': 2, 'scramble_imgpath': 'images/scramble/B10_', 'scramble_dur_a': 1, 'scramble_dur_b': 4, 'scramble_dur_c': 2.5, 'scramble_jitter': 3.5},
      {'high_imgpath': 'images/high/B5_', 'high_dur_a': 4, 'high_dur_b': 2, 'high_dur_c': 1.5, 'high_jitter': 3, 'low_imgpath': 'images/low/B5_', 'low_dur_a': 1, 'low_dur_b': 3, 'low_dur_c': 3.5, 'low_jitter': 3.5, 'scramble_imgpath': 'images/scramble/B14_', 'scramble_dur_a': 4, 'scramble_dur_b': 2, 'scramble_dur_c': 1.5, 'scramble_jitter': 3},
      {'high_imgpath': 'images/high/B13_', 'high_dur_a': 1.5, 'high_dur_b': 3.5, 'high_dur_c': 2.5, 'high_jitter': 6, 'low_imgpath': 'images/low/B7_', 'low_dur_a': 1.5, 'low_dur_b': 4, 'low_dur_c': 2, 'low_jitter': 6, 'scramble_imgpath': 'images/scramble/B8_', 'scramble_dur_a': 2, 'scramble_dur_b': 3, 'scramble_dur_c': 2.5, 'scramble_jitter': 6}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
    Routine fix
    Routine image_a
    Routine image_b
    Routine image_c
  LoopTerminator trials
  Routine end_fix
