PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  blendMode = nofbo
  color = -1.0000, -1.0000, -1.0000
  expName = high_ED
  keyboardBackend = ioHub
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Routines
  Routine wait
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    CodeComponent mouse_hide
      Code Type = Py
      Begin Routine:
        ##start and hide mouse
        mouse = event.Mouse(visible=False)
    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wait for 'o' trigger from scanner
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    KeyboardComponent trigger
      allowedKeys = 'o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine fix
    RoutineSettingsComponent fix
      saveStartStop = False
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    PolygonComponent fix_jittered
      fillColor = white
      shape = cross
      size = (.05,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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    StaticComponent preload
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine image_a
    RoutineSettingsComponent image_a
      saveStartStop = False
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    ImageComponent pic_a
      image [set during: fix.preload] = $imgpath+"a.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_a
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  Routine image_b
    RoutineSettingsComponent image_b
      saveStartStop = False
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    ImageComponent pic_b
      image [set during: fix.preload] = $imgpath+"b.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_b
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  Routine image_c
    RoutineSettingsComponent image_c
      saveStartStop = False
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    ImageComponent pic_c
      image [set during: fix.preload] = $imgpath+"c.jpeg"
      size = [1,.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur_c
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  Routine end_fix
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    CodeComponent runin_mouse
      Code Type = Py
      Begin Routine:
        ##hide mouse
        mouse = event.Mouse(visible=False)
    PolygonComponent runin_fix
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (.05,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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Flow
  Routine wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imgpath': 'images/B11_', 'dur_a': 1, 'dur_b': 3, 'dur_c': 3.5, 'jitter': 4},
      {'imgpath': 'images/B7_', 'dur_a': 2, 'dur_b': 2.5, 'dur_c': 3, 'jitter': 5},
      {'imgpath': 'images/B5_', 'dur_a': 4, 'dur_b': 2, 'dur_c': 1.5, 'jitter': 3},
      {'imgpath': 'images/B13_', 'dur_a': 1.5, 'dur_b': 3.5, 'dur_c': 2.5, 'jitter': 6},
      {'imgpath': 'images/B9_', 'dur_a': 1, 'dur_b': 4, 'dur_c': 2.5, 'jitter': 2},
      {'imgpath': 'images/B14_', 'dur_a': 2.5, 'dur_b': 1, 'dur_c': 4, 'jitter': 7},
      {'imgpath': 'images/B3_', 'dur_a': 4, 'dur_b': 1, 'dur_c': 2.5, 'jitter': 4.5},
      {'imgpath': 'images/B4_', 'dur_a': 3.5, 'dur_b': 1.5, 'dur_c': 2.5, 'jitter': 2},
      {'imgpath': 'images/B6_', 'dur_a': 2, 'dur_b': 3, 'dur_c': 2.5, 'jitter': 3},
      {'imgpath': 'images/B2_', 'dur_a': 2.5, 'dur_b': 3, 'dur_c': 2, 'jitter': 6},
      {'imgpath': 'images/B1_', 'dur_a': 4, 'dur_b': 2, 'dur_c': 1.5, 'jitter': 5},
      {'imgpath': 'images/B10_', 'dur_a': 3, 'dur_b': 3.5, 'dur_c': 1, 'jitter': 9},
      {'imgpath': 'images/B12_', 'dur_a': 1.5, 'dur_b': 4, 'dur_c': 2, 'jitter': 3.5},
      {'imgpath': 'images/B8_', 'dur_a': 2.5, 'dur_b': 1, 'dur_c': 4, 'jitter': 3}]
    Routine fix
    Routine image_a
    Routine image_b
    Routine image_c
  LoopTerminator trials
  Routine end_fix
